
<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer For Unity v2 Moderate 1"
      Description="Simulated Ultrasound"
    />
     <!-- Image marker tracker-->
    <Device
      Id="TrackerDevice"
      Type="OpenIGTLinkTracker"
      MessageType="TRANSFORM"
      ToolReferenceFrame="Tracker"
      ServerAddress="192.168.0.193"
      ServerPort="18946"
      AcquisitionRate="90"
      IgtlMessageCrcCheckEnabled="true"
      UseReceivedTimestamps="false"
      UseLastTransformsOnReceiveTimeout="true"
      LocalTimeOffsetSec ="0.0"
      ReconnectOnReceiveTimeout="true">
      <DataSources>
        <DataSource Type="Tool" Id="Probe"  />
        <DataSource Type="Tool" Id="Needle"  />
        <DataSource Type="Tool" Id="Kidney" />
        <DataSource Type="Tool" Id="Gelblock" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Needle" />
          <DataSource Id="Kidney" />
          <DataSource Id="Gelblock" />
        </OutputChannel>
      </OutputChannels>
    </Device>    
 <!-- For getting images from the US simulator -->
    <Device
      Id="VideoDevice"
      Type="UsSimulator"
      LocalTimeOffsetSec="0.0"
      AcquisitionRate="90" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" />  
      </DataSources>      
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>      
      <vtkPlusUsSimulatorAlgo
        ImageCoordinateFrame="Image"
        ReferenceCoordinateFrame="Reference"
        IncomingIntensityMwPerCm2="300"
        BrightnessConversionGamma="0.2"
        BrighntessConversionOffset="30"
        NumberOfScanlines="128"
        NumberOfSamplesPerScanline="1000"
        NoiseAmplitude="12.0"
        NoiseFrequency="2.5 3.5 1"
        NoisePhase="50 20 0"        
        >
        <SpatialModel Name="Air" 
        DensityKgPerM3="1.2" 
        SoundVelocityMPerSec="343" 
        AttenuationCoefficientDbPerCmMhz="100.0" 
        BackscatterDiffuseReflectionCoefficient="0.1" 
        SurfaceReflectionIntensityDecayDbPerMm="50" 
        />
        <SpatialModel
          Name="Gelblock"
          Type="Model"
          ObjectCoordinateFrame="Gelblock"
          ModelFile="D:/AllModels/CubeModel_m.stl"
          DensityKgPerM3="910"
          SoundVelocityMPerSec="1540"
          AttenuationCoefficientDbPerCmMhz="3.0"
          BackscatterDiffuseReflectionCoefficient="0.1"
          SurfaceSpecularReflectionCoefficient="0.0"
          SurfaceDiffuseReflectionCoefficient="0.0"
          TransducerSpatialModelMaxOverlapMm="50"
        />     
        <SpatialModel
          Name="Kidney"
          ObjectCoordinateFrame="Kidney"
          ModelFile="D:/AllModels/ModerateKidney1_m.stl"
          DensityKgPerM3="1066"
          SoundVelocityMPerSec="1570"
          AttenuationCoefficientDbPerCmMhz="1.0"
          BackscatterDiffuseReflectionCoefficient="0.001"
          SurfaceSpecularReflectionCoefficient="0.0"
          SurfaceDiffuseReflectionCoefficient="0.0" />
        <SpatialModel
          Name="Calyces"
          ObjectCoordinateFrame="Kidney"
          ModelFile="D:/AllModels/ModerateCollecting1_m.stl"
          DensityKgPerM3="1201"
          SoundVelocityMPerSec="2200"
          AttenuationCoefficientDbPerCmMhz="0"
          BackscatterDiffuseReflectionCoefficient="0.000"          
          SurfaceSpecularReflectionCoefficient="0.0"
          SurfaceDiffuseReflectionCoefficient="0.3"
        />
        <!--SpatialModel
          Name="Vessel"
          ObjectCoordinateFrame="Kidney"
          ModelFile="D:/Artery_m.stl"
          ModelToObjectTransform="
            1 0 0 0
            0 1 0 0
            0 0 1 0
            0 0 0 1"
          DensityKgPerM3="1102"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.01"
          BackscatterDiffuseReflectionCoefficient="0.001"          
          SurfaceSpecularReflectionCoefficient="0.0"
          SurfaceDiffuseReflectionCoefficient="0.0"
        /-->
        
        <SpatialModel 
          Name="Needle" 
          ObjectCoordinateFrame="NeedleTip" 
          ModelFile="D:/AllModels/NeedleModel.stl" 
          DensityKgPerM3="2500" 
          SoundVelocityMPerSec="5000" 
          AttenuationCoefficientDbPerCmMhz="3.0" 
          BackscatterDiffuseReflectionCoefficient="1" 
          SurfaceSpecularReflectionCoefficient="0.0" 
          SurfaceDiffuseReflectionCoefficient="0.3" 
          SurfaceReflectionIntensityDecayDbPerMm="0.1" 
        />
        <SpatialModel 
          Name="Needle" 
          ObjectCoordinateFrame="NeedleTip" 
          ModelFile="D:/AllModels/NeedleModel_Double_6mm.stl" 
          DensityKgPerM3="1600" 
          SoundVelocityMPerSec="5000" 
          AttenuationCoefficientDbPerCmMhz="0.03" 
          BackscatterDiffuseReflectionCoefficient="0.9" 
          SurfaceSpecularReflectionCoefficient="0.0" 
          SurfaceDiffuseReflectionCoefficient="0.0" 
          SurfaceReflectionIntensityDecayDbPerMm="0" 
        />
        <RfProcessing>
          <ScanConversion
            TransducerName="Ultrasonix_C5-2/60"
            TransducerGeometry="CURVILINEAR"
           ModelToObjectTransform="
            1 0 0 0
            0 1 0 0
            0 0 1 0
            0 0 0 1"
            RadiusStartMm="60.0"
            RadiusStopMm="130.0"
            ThetaStartDeg="-28.0"
            ThetaStopDeg="28.0"
            TransducerCenterPixel="410 100"
            OutputImageSizePixel="820 616"   
            OutputImageSpacingMmPerPixel="0.13 0.13" />
        </RfProcessing>
        <!-- Image size pixel change background black size  small: smaller black window  -->
        <!-- Image pixel spacing change ultrasound simulation size  larger spacing: smaller US image affects resolution -->
      </vtkPlusUsSimulatorAlgo>

    </Device>
    
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

    <!--Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mhd"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device-->    
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
        <TransformNames>
        <!--These transforms becomes active transforms in slicer-->
        <Transform Name="GelblockToReference" />
        <Transform Name="NeedleTipToReference" />
        <Transform Name="ProbeToReference" />
        <Transform Name="KidneyToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>
  <!--scaling change 1xX -->
      <Transform From="Image" To="Probe"
      Matrix="
            0.13 0 0 -53.3
            0 0 0.13 0
            0 -0.13 0 8
            0 0 0 1" /> 

    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
            1 0 0 0
            0 1 0 0
            0 0 1 0
            0 0 0 1" />    
    <Transform From="Tracker" To="Reference" 
      Matrix="
            1 0 0 0
            0 1 0 0
            0 0 1 0
            0 0 0 1"  />
    <Transform From="NeedleTip" To="Needle"
      Matrix="
         1 0 0 0
         0 1 0 0
         0 0 1 0
         0 0 0 1" />

  </CoordinateDefinitions> 

</PlusConfiguration>
